PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'Education': '', 'Age': '', 'Sex': '', 'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = UnCon-CFS
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Routines
  Routine Instructions
    PolygonComponent inst_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = flash_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent inst_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = flash_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent inst_txt_r
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = txt_r_p
      startVal [time (s)] = 0
      text = آزمون تست
      wrapWidth = float(win.size[0]/3)
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    ImageComponent inst_swipe_r
      image = noun_swipe.png
      pos = icon_r_p
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent inst_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = stim_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent inst_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = stim_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent inst_txt_l
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = txt_l_p
      startVal [time (s)] = 0
      text = آزمون تست
      wrapWidth = float(win.size[0]/3)
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    ImageComponent inst_swipe_l
      image = noun_swipe.png
      pos = icon_l_p
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent swipe2_click
      clickable = inst_swipe_r, inst_swipe_l
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine flash_init
    CodeComponent def_set_colors
      Code Type = Py
      Begin Experiment:
        # Colors used during the experiment.
        # Color variables end with _c.
        def set_colors():
            global screen_c # screen color
            global frame_c # frame color
            global cross_c  # cross color
            screen_c = [.002, .002, .002]
            frame_c = [-1,-1,-1]
            cross_c = 'black'
    CodeComponent def_set_sizes
      Code Type = Py
      Begin Experiment:
        # Sizes used during the experiment
        # Size variables end with _s.
        def set_sizes():
            global frame_s
            global sq_s # square size (square where the stimulus is shown)
            #global sq_f_s # square size (square underneath is shown)
            global image_s
            global txt_frame_s # frame size of textbox
            global txt_sq_s # square size of textbox
            global txt_s
            global icon_s #size of the mouse icons
            global fix_s  # size of fixation crosses on top of stimuli


            screen_size = np.array( win.size )
            frame_s = np.array( [ win.size[0]/2, win.size[1] ] )
            sq_s = (frame_s) * 0.95
            image_s = (frame_s) * 0.84
            txt_frame_s = (np.array( [ win.size[0]/2, win.size[1]/2 ] )) * 0.95
            txt_sq_s = (txt_frame_s) * 0.84
            txt_s = (txt_sq_s) * 0.95
            icon_s = np.array( [ win.size[0]/10, win.size[1]/8 ] )
            fix_s = (frame_s) * 0.09
    CodeComponent def_set_positions
      Code Type = Py
      Begin Experiment:
        # set positions used during the experiment
        # Position variables end with _p.
        def set_positions():
          global stim_p # position of the text and image stimuli (left or right according experiment settings).
          global flash_p # position of the flash stimulus (right or left according experiment settings).
          global txt_r_p
          global txt_l_p
          global icon_r_p
          global icon_l_p
          global like_r_p
          global like_l_p
          global dislike_r_p
          global dislike_l_p
          global share_r_p
          global share_l_p
          global next_r_p
          global next_l_p

          delta_x, delta_y = win.size/4
          quarter_centers = [ [-delta_x, +delta_y], [+delta_x, +delta_y], [+delta_x, -delta_y], [-delta_x, -delta_y] ] #centers when window is quartered.
          half_centers = [ [-delta_x , 0], [delta_x, 0] ] #centers when window is halved.

          stim_p = half_centers[0]
          flash_p = half_centers[1]
          txt_r_p = quarter_centers[1]
          txt_l_p = quarter_centers[0]
          icon_l_p = quarter_centers[3]
          icon_r_p = quarter_centers[2]

          icon_dist_x = win.size[0]/14
          icon_dist_y = win.size[1]/10
          icon_centers = [[+icon_dist_x, +icon_dist_y], [+icon_dist_x, -icon_dist_y], [-icon_dist_x, +icon_dist_y], [-icon_dist_x, -icon_dist_y]]

          like_l_p = icon_l_p + np.array( icon_centers[2] )
          dislike_l_p = icon_l_p + np.array( icon_centers[0] )
          share_l_p = icon_l_p + np.array( icon_centers[3] )
          next_l_p = icon_l_p + np.array( icon_centers[1] )
          like_r_p = icon_r_p + np.array( icon_centers[2] )
          dislike_r_p = icon_r_p + np.array( icon_centers[0] )
          share_r_p = icon_r_p + np.array( icon_centers[3] )
          next_r_p = icon_r_p + np.array( icon_centers[1] )
    CodeComponent def_set_timing
      Code Type = Py
      Begin Experiment:
        # define timings
        # Time variables used during the experiment
        # Time variables end with _t.
        def jittery():
            global before_t # The duration (in frames) before the stimulus presentation
            global fade_i_t # The duration (in frames) of the fade in of stimulus
            global inside_t # The duration (in frames) of a stimulus presentation beetwen fade in and out
            global fade_o_t # The duration (in frames) of the fade out of stimulus
            global after_t # The duration (in frames) after stimulus presentation
            global stim_t # The duration (in frames) of the stimulus (in + inside + out)
            global total_t # The duration (in frames) of a stimulus presentation (before + stimulus + after)
            global fade_i_end_t # The frame end of the fade in
            global fade_o_beg_t # The frame end of the inside
            global fade_o_end_t # The frame end of the fade out
            global before_t_f # The duration (in frames) before the stimulus presentation
            global fade_i_t_f # The duration (in frames) of the fade in of stimulus
            global inside_t_f # The duration (in frames) of a stimulus presentation beetwen fade in and out
            global fade_o_t_f # The duration (in frames) of the fade out of stimulus
            global after_t_f # The duration (in frames) after stimulus presentation
            global stim_t_f # The duration (in frames) of the stimulus (in + inside + out)
            global total_t_f # The duration (in frames) of a stimulus presentation (before + stimulus + after)
            global fade_i_end_t_f # The frame end of the fade in
            global fade_o_beg_t_f # The frame end of the inside
            global fade_o_end_t_f # The frame end of the fade out
            global f_t # The duration (in frames) of a flash image presentation

            f_t = 6
            fps = 60 # frames per second

            # TIMES FOR OPACITY
            before_t = 0.2 * fps
            fade_i_t = 0.2 * fps
            inside_t = 0.4 * fps
            fade_o_t = 0.2 * fps
            after_t = 0.2 * fps
            stim_t  = fade_i_t + inside_t + fade_o_t
            total_t  = before_t + stim_t + after_t
            fade_i_end_t = before_t + fade_i_t
            fade_o_beg_t = fade_i_end_t + inside_t
            fade_o_end_t = before_t + stim_t
            # TIMES FOR OPACITY OF FRAME BEHIND FLASHES
            #before_t_f = 20 * fps
            #fade_i_t_f = 7 * fps
            #inside_t_f = 0 * fps
            #fade_o_t_f = 0 * fps
            #after_t_f = 0 * fps
            #stim_t_f  = fade_i_t_f + inside_t_f + fade_o_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            #total_t_f  = before_t_f + stim_t_f + after_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            #fade_i_end_t_f = before_t_f + fade_i_t_f   # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            #fade_o_beg_t_f = fade_i_end_t_f + inside_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
            #fade_o_end_t_f = before_t_f + stim_t_f  # ATTENTION, THIS ONE NEEDS TO CHANGE AT EACH TRIAL FOR FIXATION CROSS JITTER
    CodeComponent def_flash
      Code Type = Py
      Begin Experiment:
        # flash stimulus functions
        # flash initialization
        def flash_init(win, position=[0,0], square_size=30, columns=10, rows=10):
            global flash # The flash stimulus (an array of flashing squares)
            #sqsp=30
            red = [1, -1, -1]
            green = [-1, 1, -1]
            blue = [-1, -1, 1]
            yellow = [1, 0.97, -0.55]
            pink = [1, 0.6, 0.6]
            black = [-1, -1, -1]
            color_set = [red, green, blue, yellow, pink]
            cell_number = columns * rows
            by_color = int(np.floor(float(cell_number)/len(color_set)))
            # np.floor returns the next biggest integer (e.g. np.floor of 2.5 is 2)
            # fill an array with colors. Each color should appear approximatively the same number of times.
            f_colors = []
            for c in color_set:
                for i in range(by_color):
                    f_colors.append(c)
            shuffle(color_set)
            i = cell_number - len(f_colors)
            while i > 0:
                f_colors.append(color_set[i])
                i -= 1
            # randomize color order.
            shuffle(f_colors)
            # fill an array with coordinate for each color square. First square should be at the upper left
            # and next should follow from left to right and up to down.
            xys = []
            x_left = (1 - columns) * square_size / 2
            y_top = (1 - rows) * square_size / 2
            for l in range(rows):
                for c in range(columns):
                   #r1=(random()-0.5)*square_size #ariel
                   #r2=(random()-0.5)*square_size
                   xys.append((x_left+ c * square_size, y_top+ l * square_size))
            flash = visual.ElementArrayStim(win=win,
                                fieldPos=position,
                                fieldShape='sqr',
                                nElements=cell_number,
                                sizes=square_size,
                                xys=xys,
                                colors=f_colors,
                                elementTex=None,
                                elementMask=None,
                                name='flash',
                                autoLog=False)

        # flash stimulus change
        def flash_change():
            global flash
            shuffle(flash.colors)
            flash.setColors(flash.colors)
    CodeComponent experiment_init
      Code Type = Py
      Begin Experiment:
        # initiate colors
        set_colors()
        set_sizes()
        set_positions()
        jittery()
        flash_init(win, flash_p, square_size=40, columns=13, rows=16)
        #flash_s_init(win, s_p, square_size=50, columns=10, rows=10)
  Routine pause
    TextComponent text_pause_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = [flash_p[0], 0]
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        هرموقع که آماده بودید کلید
        space
        را فشار دهید.
    TextComponent text_pause_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = [stim_p[0], 0]
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        هرموقع که آماده بودید کلید
        space
        را فشار دهید.
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText_f
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = flash_p
      startVal [time (s)] = 0.0
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      text:
        پایان آزمون.
        با سپاس از شما
    TextComponent thanksText_s
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = stim_p
      startVal [time (s)] = 0.0
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      text:
        پایان آزمون.
        با سپاس از شما
    KeyboardComponent key_resp_thanks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    PolygonComponent blank_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = stim_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent balnk_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = flash_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent blank_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = flash_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    PolygonComponent blank_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = stim_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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  Routine contest
    PolygonComponent contest_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = flash_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent contest_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = flash_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent contest_text_r
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = txt_r_p
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        با درود
        توضیحات آزمون
        مدت زمان آزمون
        محرمانه بودن اطلاعات
        تشکر
    ImageComponent contest_swipe_r
      image = noun_swipe.png
      pos = icon_r_p
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent contest_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = stim_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent contest_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = stim_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = txt_l_p
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text:
        با درود
        توضیحات آزمون
        مدت زمان آزمون
        محرمانه بودن اطلاعات
        تشکر
    ImageComponent contest_swipe_l
      image = noun_swipe.png
      pos = icon_l_p
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent swipe_click
      clickable = contest_swipe_r, contest_swipe_l
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine fixation_point
    PolygonComponent fix_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = stim_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent fix_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      lineWidth = 0
      pos = stim_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
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    PolygonComponent fix_cross_l
      fillColor = $cross_c
      lineColor = $cross_c
      pos = stim_p
      shape = cross
      size = fix_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent fix_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = flash_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent fix_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      lineWidth = 0
      pos = flash_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent fix_cross_r
      fillColor = $cross_c
      lineColor = $cross_c
      pos = flash_p
      shape = cross
      size = fix_s
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent fix_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_statement
    PolygonComponent statement_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = txt_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      lineWidth = 0
      pos = txt_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent statement_r
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = txt_r_p
      startVal [time (s)] = 0.0
      text [set every repeat] = $Tweets
      wrapWidth = float(win.size[0]/3)
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    PolygonComponent statement_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      lineWidth = 0
      pos = txt_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      lineWidth = 0
      pos = txt_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_tweet_f1
      font = Nazli
      languageStyle = Arabic
      letterHeight = 30
      pos = txt_l_p
      startVal [time (s)] = 0.0
      wrapWidth = float(win.size[0]/3)
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      text [set every repeat]:
        $Tweets
    PolygonComponent icon_frame_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = icon_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_screen_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = icon_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_frame_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = icon_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_screen_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = icon_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like_r
      image = noun_like.png
      pos = like_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike_r
      image = noun_Dislike.png
      pos = dislike_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share_r
      image = noun_share.png
      pos = share_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent swipe_r
      image = noun_swipe.png
      pos = next_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like_l
      image = noun_like.png
      pos = like_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike_l
      image = noun_Dislike.png
      pos = dislike_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share_l
      image = noun_share.png
      pos = share_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent swipe_l
      image = noun_swipe.png
      pos = next_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent response
      clickable = like_r, like_l, dislike_r, dislike_l, share_r, share_l, swipe_r, swipe_l
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine PicsBlocks
    CodeComponent blocks_code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        from numpy.random import choice

        pic_choice = choice(5, size=3, replace=False)

        image_blocks = ['NegBlock.csv', 'NeuBlock.csv', 'PosBlock.csv']
        np.random.shuffle(image_blocks) # randomise order
  Routine cfs
    CodeComponent flash_code
      Code Type = Py
      Begin Routine:
        # flash begin routine
        f_change = 0
      Each Frame:
        # flash each frame
        if frameN >= f_change:
            flash_change()
            myRand =randint(1,100)
            f_change += f_t
        flash.draw()
    PolygonComponent stim_frame
      fillColor = $frame_c
      lineColor = $frame_c
      pos = stim_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $total_t
      units = pix
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    PolygonComponent stim_screen
      fillColor = $frame_c
      lineColor = $frame_c
      pos = stim_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $total_t
      units = pix
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    PolygonComponent flash_frame
      lineColor = $frame_c
      pos = flash_p
      shape = rectangle
      size = frame_s
      startVal [time (s)] = 0
      stopVal [condition] = $stim_frame.status==FINISHED
      units = pix
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    PolygonComponent flash_screen
      lineColor = $screen_c
      lineWidth = 100
      pos = flash_p
      shape = rectangle
      size = image_s
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stim_frame.status==FINISHED
      units = pix
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    ImageComponent stim_image
      image [set every repeat] = $Image
      opacity [set every frame] = ((frameN - before_t) / fade_i_t) if (frameN < fade_i_end_t) else (1 if(frameN < fade_o_beg_t) else (fade_o_end_t - frameN) / fade_o_t)
      pos = stim_p
      size = image_s
      startVal [frame N] = $before_t
      stopVal [duration (frames)] = $stim_t
      units = pix
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    TextComponent fix_cross_stim
      color = red
      letterHeight = 50
      pos = stim_p
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $total_t
      text = +
      wrapWidth = None
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    TextComponent fix_cross_flash
      color = red
      letterHeight = 50
      pos = flash_p
      startVal [time (s)] = 0
      stopVal [duration (frames)] = $total_t
      text = +
      wrapWidth = None
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  Routine statement_accuracy
    PolygonComponent statement_frame3_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = txt_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen3_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = txt_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_img2_r
      image [set every repeat] = $Statements
      pos = txt_r_p
      size = txt_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_frame3_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = txt_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen3_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = txt_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
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    ImageComponent statement_img2_l
      image [set every repeat] = $Statements
      pos = txt_l_p
      size = txt_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rating_frame_r
      lineColor = $frame_c
      pos = icon_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rating_screen_r
      lineColor = $screen_c
      pos = icon_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rating_frame_l
      lineColor = $frame_c
      pos = icon_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rating_screen_l
      lineColor = $screen_c
      pos = icon_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent scale_msg_r
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = (350, -120)
      startVal [time (s)] = 0.0
      text = تا چه میزان از صحت و اعتبار این متن اطمینان دارید؟
      units = pix
      wrapWidth = float(win.size[0]/3)
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    TextComponent scale_msg_l
      font = Nazli
      languageStyle = Arabic
      letterHeight = 25
      pos = (-350, -120)
      startVal [time (s)] = 0.0
      text = تا چه میزان از صحت و اعتبار این متن اطمینان دارید؟
      wrapWidth = float(win.size[0]/3)
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    RatingScaleComponent rating_l
      forceEndRoutine = True
      high = 7
      low = 1
      pos = (-350, -250)
      size = 0.85
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_r
      forceEndRoutine = True
      high = 7
      low = 1
      pos = (350, -250)
      size = 0.85
      startVal [time (s)] = 0.0
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  Routine statement_interaction
    CodeComponent statement_code
      Code Type = Py
      Begin Experiment:
        import random
        block_num = 3
        statement_per_block = 4
        #sample_num = int((block_num*statement_per_block)/2)
        request_num = int(statement_per_block/2)

        news = pd.read_csv("news-statements.csv")

        news["displayed_yet"] = 0
        not_displayed_news = news.loc[news["displayed_yet"]== 0] #creating a new dataframe
        overall_selected_statements = {}
        #np.zeros((block_num , statement_per_block), dtype = str)
        for i in range(block_num):
            not_displayed_news = news.loc[news["displayed_yet"]== 0]
            selected_statements = not_displayed_news.groupby("Accuracy").sample(n= request_num)
            selected_ids = selected_statements.index
            news.at[selected_ids,"displayed_yet"] = 1
            print(news)
            #selected_statements_array = np.array(selected_statements["Statements"])
            #selected_statements_array = np.random.permutation(selected_statements_array)
            #overall_selected_statements[i] = selected_statements_array
            selected_statements_list = list(selected_ids)
            random.shuffle(selected_statements_list)
            print(selected_statements_list)
            overall_selected_statements[i] = selected_statements_list
    PolygonComponent statement_frame2_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = txt_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen2_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = txt_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_img_r
      image [set every repeat] = $Statements
      pos = txt_r_p
      size = txt_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_frame2_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = txt_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent statement_screen2_l
      fillColor = $screen_c
      lineColor = $screen_c
      pos = txt_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent statement_img_l
      image [set every repeat] = $Statements
      pos = txt_l_p
      size = txt_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_frame2_r
      fillColor = $frame_c
      lineColor = $frame_c
      pos = icon_r_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_screen2_r
      fillColor = $screen_c
      lineColor = $screen_c
      pos = icon_r_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_fram2_l
      fillColor = $frame_c
      lineColor = $frame_c
      pos = icon_l_p
      shape = rectangle
      size = txt_frame_s
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent icon_screen2_l
      fillColor = $[1,1,1]
      pos = icon_l_p
      shape = rectangle
      size = txt_sq_s
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like2_r
      image = noun_like.png
      pos = like_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike2_r
      image = noun_Dislike.png
      pos = dislike_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share2_r
      image = noun_share.png
      pos = share_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent swipe2_r
      image = noun_swipe.png
      pos = next_r_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent like2_l
      image = noun_like.png
      pos = like_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent dislike2_l
      image = noun_Dislike.png
      pos = dislike_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent share2_l
      image = noun_share.png
      pos = share_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent swipe2_l
      image = noun_swipe.png
      pos = next_l_p
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse
      clickable = like2_r, like2_l, dislike2_r, dislike2_l, share2_r, share2_l, swipe2_r, swipe2_l
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine flash_init
  Routine contest
  Routine Instructions
  Routine fixation_point
  LoopInitiator pretest loopType="TrialHandler"
    conditionsFile = ImageConditions.csv
    loopType = random
    nReps = 1
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    Routine cfs
    Routine blank
    Routine pre_statement
  LoopTerminator pretest
  Routine Instructions
  LoopInitiator conditionSelectLoop loopType="TrialHandler"
    conditionsFile = chooseBlocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.csv'), ('QuestionFiles', 'Q-1.csv')]),
      OrderedDict([('condsFile', 'NeuBlock.csv'), ('QuestionFiles', 'Q-2.csv')]),
      OrderedDict([('condsFile', 'PosBlock.csv'), ('QuestionFiles', 'Q-3.csv')])]
    LoopInitiator blocks loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $pic_choice 
        conditionsFile = $thisConditionSelectLoop['condsFile']
        loopType = random
        nReps = 1
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        Routine PicsBlocks
        Routine cfs
      LoopTerminator trials
      Routine blank
      LoopInitiator trials_2 loopType="TrialHandler"
        Selected rows = $overall_selected_statements[conditionSelectLoop.thisN][(blocks.thisN *( statement_per_block)): ((blocks.thisN + 1) * ( statement_per_block))]
        conditionsFile = news-statements.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Statements', 'News/F-1.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-2.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-3.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-4.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-5.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-6.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-7.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-8.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/T-1.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-2.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-3.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-4.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-5.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-6.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-7.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-8.png'), ('Accuracy', 1)])]
        Routine statement_interaction
      LoopTerminator trials_2
    LoopTerminator blocks
  LoopTerminator conditionSelectLoop
  Routine Instructions
  LoopInitiator conditionSelectLoop_2 loopType="TrialHandler"
    conditionsFile = chooseBlocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'NegBlock.csv'), ('QuestionFiles', 'Q-1.csv')]),
      OrderedDict([('condsFile', 'NeuBlock.csv'), ('QuestionFiles', 'Q-2.csv')]),
      OrderedDict([('condsFile', 'PosBlock.csv'), ('QuestionFiles', 'Q-3.csv')])]
    LoopInitiator blocks_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      LoopInitiator trials_3 loopType="TrialHandler"
        Selected rows = $pic_choice
        conditionsFile = $thisConditionSelectLoop_2['condsFile']
        loopType = random
        nReps = 1
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        Routine cfs
      LoopTerminator trials_3
      Routine blank
      LoopInitiator trials_4 loopType="TrialHandler"
        Selected rows = $overall_selected_statements[conditionSelectLoop_2.thisN][(blocks_2.thisN *( statement_per_block)): ((blocks_2.thisN + 1) * ( statement_per_block))]
        conditionsFile = news-statements.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Statements', 'News/F-1.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-2.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-3.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-4.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-5.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-6.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-7.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/F-8.png'), ('Accuracy', 0)]),
          OrderedDict([('Statements', 'News/T-1.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-2.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-3.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-4.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-5.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-6.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-7.png'), ('Accuracy', 1)]),
          OrderedDict([('Statements', 'News/T-8.png'), ('Accuracy', 1)])]
        Routine statement_accuracy
      LoopTerminator trials_4
    LoopTerminator blocks_2
  LoopTerminator conditionSelectLoop_2
  Routine thanks
